import ij.IJ;
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;
 
 
dir = System.getProperty( "dir" );

job_number = System.getProperty( "job_number" );
 
System.out.println( "dir=" + dir );

//activate cluster processing
 
IJ.run("Toggle Cluster Processing", "display_cluster");

new File(dir + "/converted/hdf5").mkdirs(); // create converted directory if it does not exist

IJ.run("As HDF5 ...", "select=["+ dir +"/converted//dataset.xml]" + 
	"resave_angle=[All angles]" + 
	"resave_channel=[All channels]" +  
	"resave_illumination=[All illuminations]" + 
	"resave_tile=[All tiles]" + 
	"resave_timepoint=[All timepoints]" + 

	"subsampling_factors=[{ {1,1,1}, {2,2,1}, {4,4,1}, {8,8,2}, {16,16,4} }]" + 
	"hdf5_chunk_sizes=[{ {32,32,4}, {32,32,4}, {16,16,16}, {16,16,16}, {16,16,16} }]" + 
	" split_hdf5 timepoints_per_partition=[1] setups_per_partition=[1] use_deflate_compression " + 
	"run_only_job_number=[" + job_number + "]" +	
	"export_path=[" + dir +"/converted/hdf5/hdf5_dataset.xml]");

 
/* shutdown */
System.exit(0);
