import ij.IJ; 		// calls imagej
import ij.Prefs; 	// calls imagej settings
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;

runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");
timepoint_flag = System.getProperty( "timepoint_flag" );
channel_flag = System.getProperty( "channel_flag" );
angle_flag = System.getProperty( "angle_flag" );
pos_flag = System.getProperty( "pos_flag" );
til_flag = System.getProperty( "til_flag" );

dirfrom = System.getProperty( "dir_from" );
pth = System.getProperty( "pth" );

zAspect = System.getProperty( "zAspect" );

Boolean timepoint_flag = Boolean.valueOf(timepoint_flag);
Boolean channel_flag = Boolean.valueOf(channel_flag);
Boolean angle_flag = Boolean.valueOf(angle_flag);
Boolean pos_flag = Boolean.valueOf(pos_flag);
Boolean til_flag = Boolean.valueOf(til_flag);

System.out.println(timepoint_flag);
System.out.println(til_flag);
System.out.println(channel_flag);
System.out.println(angle_flag);
System.out.println(pos_flag);

new File(dirfrom + pth + "/Processing").mkdirs(); // create converted directory if it does not exist
String paternString = "";

int i=0;
if (angle_flag){
	paternString = "pattern_" + String.valueOf(i) + "=[Angles] ";
	i=i+1;
} else {}
paternString = paternString + "pattern_" + String.valueOf(i) + "=[-- ignore this pattern --] "+ "pattern_" + String.valueOf(i+1) + "=[-- ignore this pattern --] ";
i=i+2;
if (til_flag){
	paternString = paternString + "pattern_" + String.valueOf(i) + "=[Tiles] ";
	i=i+1;
} else {}

if (pos_flag){
	paternString = paternString + "pattern_" + String.valueOf(i) + "=[Illuminations] ";
	i=i+1;
} else {}

if (timepoint_flag){
	paternString = paternString + "pattern_" + String.valueOf(i) + "=[TimePoints] ";
	i=i+1;
} else {}

if (channel_flag){
	paternString = paternString + "pattern_" + String.valueOf(i) + "=[Channels] ";
	i=i+1;
} else {}
System.out.println(paternString);




IJ.run("Define dataset ...", "define_dataset=[Automatic Loader (Bioformats based)] project_filename=[dataset.xml] path=[" + dirfrom + pth + "/*/*.tif] exclude=[10] "+ paternString + " modify_voxel_size? voxel_size_x=[1.0000] voxel_size_y=[1.0000] voxel_size_z=[" + zAspect + "] voxel_size_unit=[pixels] move_tiles_to_grid_(per_angle)?=[Do not move Tiles to Grid (use Metadata if available)] how_to_load_images=[Load raw data] dataset_save_path=[" + dirfrom + pth + "/Processing] ");


/* shutdown */
runtime.exit(0);

