import ij.IJ; 		// calls imagej
import ij.Prefs; 	// calls imagej settings
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;

runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");

/*timepoint = System.getProperty( "timepoint" );*/
fixPosStr = System.getProperty( "fixPosStr" );

dirto = System.getProperty( "dir_to" );
pth = System.getProperty( "pth" );
xmlName = System.getProperty( "xmlName" );

System.out.println(xmlName);
System.out.println(fixPosStr);




IJ.run("Filter pairwise shifts ...", "browse=[" + dirto + pth + "/" + xmlName + "] select=[" + dirto + pth + "/" + xmlName + "] filter_by_link_quality min_r=0.6 max_r=1 max_shift_in_x=0 max_shift_in_y=0 max_shift_in_z=0 filter_by_total_shift_magnitude max_displacement=100");


/* make starts of quadrants input parameters  ,,,,  fix_group_0-0 fix_group_0-9 fix_group_0-13 fix_group_0-22*/
IJ.run("Optimize globally and apply shifts ...", "select=[" + dirto + pth + "/" + xmlName + "] process_angle=[All angles] process_channel=[All channels] process_illumination=[All illuminations] process_tile=[All tiles] process_timepoint=[All Timepoints]  relative=2.500 absolute=3.500 global_optimization_strategy=[Two-Round using Metadata to align unconnected Tiles] " + fixPosStr);



/* shutdown */
runtime.exit(0);
